CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:34
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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notes:['Named the channels of the images for the corresponding structures - attention required as in here Channel number start in zero while in other softwares start in 1.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:Dapi_Orig
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:CD31_Orig
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:Fibrinogen_Orig
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "3")
    Name to assign these images:HupB_Orig
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['']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enabled:False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
    Select the input image:CD31_Orig
    Name the primary objects to be identified:CD31_Obj
    Typical diameter of objects, in pixel units (Min,Max):40,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyObjectsManually:[module_num:6|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
    Select the input image:CD31_Orig
    Name the objects to be identified:CD31_Manual_

IdentifyPrimaryObjects:[module_num:7|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notes:['']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
    Select the input image:Fibrinogen_Orig
    Name the primary objects to be identified:Fibrinogen_Obj
    Typical diameter of objects, in pixel units (Min,Max):45,4000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:HupB_Orig
    Name the primary objects to be identified:HupB_Obj
    Typical diameter of objects, in pixel units (Min,Max):20,4000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RelateObjects:[module_num:9|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notes:['']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
    Parent objects:HupB_Obj
    Child objects:CD31_Manual_
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:CD31_LabelledByHupB
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
RelateObjects:[module_num:10|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
    Parent objects:Fibrinogen_Obj
    Child objects:CD31_Manual_
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:CD31_LabelledByFibrinogen
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
MaskObjects:[module_num:11|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
    Select objects to be masked:Fibrinogen_Obj
    Name the masked objects:MaskedFibrinogen_MinusCD31Staining
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_LabelledByFibrinogen
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

MaskObjects:[module_num:12|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
    Select objects to be masked:Fibrinogen_Obj
    Name the masked objects:MaskedFibrinogen_OnlyCD31Staining
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_LabelledByFibrinogen
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:13|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
    Select objects to be masked:HupB_Obj
    Name the masked objects:MaskedHupB_MinusCD31Staining
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_LabelledByHupB
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

MaskObjects:[module_num:14|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
    Select objects to be masked:HupB_Obj
    Name the masked objects:MaskedHupB_OnlyCD31Staining
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CD31_LabelledByHupB
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:15|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
    Select objects to be masked:MaskedFibrinogen_MinusCD31Staining
    Name the masked objects:MaskedFibrinogen_MinusCD31_WithHupB
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MaskedHupB_MinusCD31Staining
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:16|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
    Select objects to be masked:MaskedHupB_MinusCD31Staining
    Name the masked objects:MaskedHupB_MinusCD31_WithFibrinogen
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Fibrinogen_Obj
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:17|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
    Select objects to be masked:MaskedHupB_MinusCD31Staining
    Name the masked objects:MaskedHupB_MinusCD31_WithoutFibrinogen
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Fibrinogen_Obj
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Retain
    Invert the mask?:No

ConvertObjectsToImage:[module_num:18|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
    Select the input objects:MaskedFibrinogen_MinusCD31Staining
    Name the output image:MaskedFibrinogen_MinusCD31Staining_Image
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:19|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
    Select the input objects:MaskedFibrinogen_OnlyCD31Staining
    Name the output image:MaskedFibrinogen_OnlyCD31Staining_Image
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:20|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
    Select the input objects:MaskedHupB_MinusCD31Staining
    Name the output image:MaskedHupB_MinusCD31Staining_Image
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:21|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
    Select the input objects:MaskedHupB_OnlyCD31Staining
    Name the output image:MaskedHupB_OnlyCD31Staining_Image
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:22|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
    Select the input objects:MaskedFibrinogen_MinusCD31_WithHupB
    Name the output image:MaskedFibrinigen_MinusCD31_WithHupB_Image
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:23|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
    Select the input objects:Fibrinogen_Obj
    Name the output image:Fibrinogen_Obj_Image
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:24|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
    Select the input objects:HupB_Obj
    Name the output image:HupB_Obj_Image
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:25|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
    Select the input objects:CD31_Manual_
    Name the output image:CD31_Obj_Image
    Select the color format:Color
    Select the colormap:Default

MeasureImageAreaOccupied:[module_num:26|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
    Measure the area occupied by:Objects
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    Select object sets to measure:CD31_LabelledByFibrinogen, CD31_LabelledByHupB, CD31_Manual_, Fibrinogen_Obj, HupB_Obj, MaskedFibrinogen_MinusCD31Staining, MaskedFibrinogen_MinusCD31_WithHupB, MaskedFibrinogen_OnlyCD31Staining, MaskedHupB_MinusCD31Staining, MaskedHupB_MinusCD31_WithFibrinogen, MaskedHupB_MinusCD31_WithoutFibrinogen, MaskedHupB_OnlyCD31Staining

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:MaskedFibrinigen_MinusCD31_WithHupB_Image
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:MaskedFibrinogen_MinusCD31_WithHupB_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Library/CloudStorage/OneDrive-UniversityofGlasgow/Research/iii/WCIP/Moxon groups/Carla/Pipeline for Neisseria project/May2025
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:MaskedFibrinogen_MinusCD31Staining_Image
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:MaskedFibrinogen_MinusCD31Staining_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Library/CloudStorage/OneDrive-UniversityofGlasgow/Research/iii/WCIP/Moxon groups/Carla/Pipeline for Neisseria project/May2025
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:MaskedFibrinogen_OnlyCD31Staining_Image
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:MaskedFibrinogen_OnlyCD31Staining_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Library/CloudStorage/OneDrive-UniversityofGlasgow/Research/iii/WCIP/Moxon groups/Carla/Pipeline for Neisseria project/May2025
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:MaskedHupB_MinusCD31Staining_Image
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:MaskedHupB_MinusCD31Staining_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Library/CloudStorage/OneDrive-UniversityofGlasgow/Research/iii/WCIP/Moxon groups/Carla/Pipeline for Neisseria project/May2025
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:MaskedHupB_OnlyCD31Staining_Image
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:MaskedHupB_OnlyCD31Staining_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Library/CloudStorage/OneDrive-UniversityofGlasgow/Research/iii/WCIP/Moxon groups/Carla/Pipeline for Neisseria project/May2025
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:Fibrinogen_Obj_Image
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Fibrinogen_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Library/CloudStorage/OneDrive-UniversityofGlasgow/Research/iii/WCIP/Moxon groups/Carla/Pipeline for Neisseria project/May2025
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:CD31_Obj_Image
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:CD31_
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Library/CloudStorage/OneDrive-UniversityofGlasgow/Research/iii/WCIP/Moxon groups/Carla/Pipeline for Neisseria project/May2025
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:34|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notes:['']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Library/CloudStorage/OneDrive-UniversityofGlasgow/Research/iii/WCIP/Moxon groups/Carla/Pipeline for Neisseria project/May2025
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|AreaOccupied_AreaOccupied_CD31_LabelledByHupB,Image|AreaOccupied_AreaOccupied_CD31_LabelledByFibrinogen,Image|AreaOccupied_AreaOccupied_Fibrinogen_Obj,Image|AreaOccupied_AreaOccupied_MaskedFibrinogen_OnlyCD31Staining,Image|AreaOccupied_AreaOccupied_MaskedFibrinogen_MinusCD31_WithHupB,Image|AreaOccupied_AreaOccupied_MaskedFibrinogen_MinusCD31Staining,Image|AreaOccupied_AreaOccupied_HupB_Obj,Image|AreaOccupied_AreaOccupied_MaskedHupB_MinusCD31Staining,Image|AreaOccupied_AreaOccupied_MaskedHupB_OnlyCD31Staining,Image|AreaOccupied_TotalArea_Fibrinogen_Obj,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
    Data to export:Fibrinogen_Obj
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:CD31_Manual_
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:HupB_Obj
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:CD31_LabelledByFibrinogen
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:CD31_LabelledByHupB
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:MaskedFibrinogen_MinusCD31Staining
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:MaskedFibrinogen_MinusCD31_WithHupB
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:MaskedFibrinogen_OnlyCD31Staining
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:MaskedHupB_MinusCD31Staining
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:MaskedHupB_OnlyCD31Staining
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
