CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:28
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '—', 'Settings converted from legacy pipeline.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '—', 'Settings converted from legacy pipeline.']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Settings converted from legacy pipeline.', 'Please change any color images from “Load as Grayscale image” to “Load as Color image”']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "2019")
    Name to assign these images:Orig
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '—', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Orig
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
RescaleIntensity:[module_num:6|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
    Select the input image:OrigGray
    Name the output image:OrigRescaleIntensity
    Rescaling method:Divide each image by the same value
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    Divisor value:1.0
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
ImageMath:[module_num:7|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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:OrigInverted
    Image or measurement?:Image
    Select the first image:OrigRescaleIntensity
    Multiply the first image by:1
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    Image or measurement?:Image
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:OrigInverted
    Name the output image:OrigEnhanced
    Select the operation:Enhance
    Feature size:30
    Feature type:Speckles
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    Speed and accuracy:Slow

Threshold:[module_num:9|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
    Select the input image:OrigEnhanced
    Name the output image:OrigThreshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:OrigThreshold
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):20,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:5
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
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
MeasureObjectNeighbors:[module_num:11|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ObjectNeighborCount
    Select colormap:hot
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:PercentTouching
    Select colormap:summer

MeasureImageAreaOccupied:[module_num:12|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Cells
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
MeasureObjectSizeShape:[module_num:13|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
    Select objects to measure:Cells
    Calculate the Zernike features?:No

ColorToGray:[module_num:14|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
    Select the input image:ObjectNeighborCount
    Conversion method:Combine
    Image type:RGB
    Name the output image:NeighborGrey
    Relative weight of the red channel:1.0
    Relative weight of the green channel:0.0
    Relative weight of the blue channel:1.0
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
Threshold:[module_num:15|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
    Select the input image:NeighborGrey
    Name the output image:NeighborGreyThreshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.2
    Lower and upper bounds on threshold:0.11,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:NeighborGreyThreshold
    Name the primary objects to be identified:NeighborGreyThreshholdObject
    Typical diameter of objects, in pixel units (Min,Max):10,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
MeasureImageAreaOccupied:[module_num:17|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Select a binary image to measure:NeighborGreyThreshold

MeasureObjectSizeShape:[module_num:18|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
    Select objects to measure:NeighborGreyThreshholdObject
    Calculate the Zernike features?:No

DisplayDataOnImage:[module_num:19|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
    Display object or image measurements?:Object
    Select the input objects:NeighborGreyThreshholdObject
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:NeighborGreyThreshold
    Text color:#F600F4
    Name the output image that has the measurements displayed:NeighborGreyThresholdObjectNumber
    Font size (points):12
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
MaskImage:[module_num:20|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
    Select the input image:OrigThreshold
    Name the output image:MaskClusters
    Use objects or an image as a mask?:Objects
    Select object for mask:NeighborGreyThreshholdObject
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:21|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
    Select the input image:MaskClusters
    Name the primary objects to be identified:IdentifyIndCells
    Typical diameter of objects, in pixel units (Min,Max):20,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
MeasureImageAreaOccupied:[module_num:22|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:IdentifyIndCells
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
MeasureObjectSizeShape:[module_num:23|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
    Select objects to measure:IdentifyIndCells
    Calculate the Zernike features?:No

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:NeighborGreyThresholdObjectNumber
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:NeighborThresholdObject
    Number of digits:4
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    Saved file format:tiff
    Output file location:Default Output Folder|Dropbox/III/Research/Morrison group/Leonie/Image files for Leandro/second analysis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:PercentTouching
    Select method for constructing file names:From image filename
    Select image name for file prefix:Orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:PT
    Saved file format:tiff
    Output file location:Default Output Folder|Dropbox/III/Research/Morrison group/Leonie/Image files for Leandro/second analysis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Default Output Folder|Dropbox/III/Research/Morrison group/Leonie/Image files for Leandro/second analysis

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:ObjectNeighborCount
    Select method for constructing file names:From image filename
    Select image name for file prefix:Orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:NC
    Saved file format:tiff
    Output file location:Default Output Folder|Morrison group/Leonie/Image files for Leandro/Second Analysis/Mature
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Default Output Folder|Dropbox/III/Research/Morrison group/Leonie/Image files for Leandro/second analysis

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:MaskClusters
    Select method for constructing file names:From image filename
    Select image name for file prefix:Orig
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:28|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Dropbox/III/Research/Morrison group/Leonie/Image files for Leandro/second analysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|AreaOccupied_Perimeter_Cells,Image|AreaOccupied_Perimeter_NeighborGreyThreshold,Image|AreaOccupied_AreaOccupied_Cells,Image|AreaOccupied_AreaOccupied_NeighborGreyThreshold,Image|AreaOccupied_TotalArea_Cells,Image|AreaOccupied_TotalArea_NeighborGreyThreshold,IdentifyIndCells|Number_Object_Number,IdentifyIndCells|Location_Center_Y,IdentifyIndCells|Location_Center_X,IdentifyIndCells|Location_Center_Z,IdentifyIndCells|AreaShape_Perimeter,IdentifyIndCells|AreaShape_FormFactor,IdentifyIndCells|AreaShape_Orientation,IdentifyIndCells|AreaShape_Center_Y,IdentifyIndCells|AreaShape_Center_X,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Analysis_
    Overwrite existing files without warning?:No
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